OpenViBE-Scenario
Comment
  testing remote ppg measures

LSL raw => #0
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_lsl.py
  Sampling frequency = 30
  Stream type = PPG
  Stream name = PPG_0
  Get all streams = true
  Generated epoch sample count = 2
-> Channel Selector "1" => #1
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Epoch average => #2
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 4
Data=#2 -> Signal display "filter"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
LSL BPM => #5
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_lsl.py
  Sampling frequency = 30
  Stream type = BPM
  Stream name = BPM_0
  Get all streams = true
  Generated epoch sample count = 2
Input 1=#5, Input 2=#0 -> Signal Merger => #6
-> Signal average
-> Matrix Display "all"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Signal=#6 -> GDF file writer
  Filename = ${__volatile_ScenarioDir}/../data_validation/record-[$core{date}-$core{time}].gdf
Data=#6 -> Signal display "all"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
